# Generated by OpenSesame 0.27.2~pre5 (Frisky Freud)
# Mon Jul 15 17:27:15 2013 (posix)
# <http://www.cogsci.nl/opensesame>

set foreground "black"
set subject_parity "even"
set font_size "18"
set description "Default description"
set title "New experiment"
set font_family "mono"
set font_bold "no"
set coordinates "relative"
set height "768"
set mouse_backend "xpyriment"
set start "experiment"
set compensation "0"
set width "1024"
set font_italic "no"
set background "white"
set sampler_backend "legacy"
set subject_nr "0"
set keyboard_backend "legacy"
set canvas_backend "xpyriment"
set transparent_variables "no"
set synth_backend "legacy"

define text_display RESTING
	set foreground "black"
	set font_size "18"
	set description "Presents a display consisting of text"
	set maxchar "50"
	set align "center"
	set content "Sie kU+00F6nnen sich fU+00FCr einen Moment ausruhen. DrU+00FCcken Sie eine beliebige Taste, wenn Sie bereit sind weiter zu machen."
	set background "white"
	set duration "keypress"
	set font_family "mono"

define loop second_set_PART1
	set repeat "1"
	set description "Repeatedly runs another item"
	set item "sequence"
	set column_order "auditory;visual;target_word;real_modality_of_target_word;trial_number;trial_type;number;number_stimuli"
	set cycles "96"
	set order "random"
	setcycle 0 trial_number "145"
	setcycle 0 trial_type "Va1"
	setcycle 0 number "1"
	setcycle 0 auditory "Silence"
	setcycle 0 target_word "Arrogant"
	setcycle 0 real_modality_of_target_word "Visual"
	setcycle 0 number_stimuli "1"
	setcycle 0 visual "Arrogant"
	setcycle 1 trial_number "146"
	setcycle 1 trial_type "Aa1"
	setcycle 1 number "1"
	setcycle 1 auditory "Arrogant"
	setcycle 1 target_word "Arrogant"
	setcycle 1 real_modality_of_target_word "Audio"
	setcycle 1 number_stimuli "1"
	setcycle 1 visual "x x x"
	setcycle 2 trial_number "147"
	setcycle 2 trial_type "Vb1"
	setcycle 2 number "1"
	setcycle 2 auditory "Silence"
	setcycle 2 target_word "Eitrig"
	setcycle 2 real_modality_of_target_word "Visual"
	setcycle 2 number_stimuli "1"
	setcycle 2 visual "Eitrig"
	setcycle 3 trial_number "148"
	setcycle 3 trial_type "Ab1"
	setcycle 3 number "1"
	setcycle 3 auditory "Eitrig"
	setcycle 3 target_word "Eitrig"
	setcycle 3 real_modality_of_target_word "Audio"
	setcycle 3 number_stimuli "1"
	setcycle 3 visual "x x x"
	setcycle 4 trial_number "149"
	setcycle 4 trial_type "Va2"
	setcycle 4 number "1"
	setcycle 4 auditory "Silence"
	setcycle 4 target_word "Ausgeraubt"
	setcycle 4 real_modality_of_target_word "Visual"
	setcycle 4 number_stimuli "1"
	setcycle 4 visual "Ausgeraubt"
	setcycle 5 trial_number "150"
	setcycle 5 trial_type "Aa2"
	setcycle 5 number "1"
	setcycle 5 auditory "Ausgeraubt"
	setcycle 5 target_word "Ausgeraubt"
	setcycle 5 real_modality_of_target_word "Audio"
	setcycle 5 number_stimuli "1"
	setcycle 5 visual "x x x"
	setcycle 6 trial_number "151"
	setcycle 6 trial_type "Vb2"
	setcycle 6 number "1"
	setcycle 6 auditory "Silence"
	setcycle 6 target_word "Fanatisch"
	setcycle 6 real_modality_of_target_word "Visual"
	setcycle 6 number_stimuli "1"
	setcycle 6 visual "Fanatisch"
	setcycle 7 trial_number "152"
	setcycle 7 trial_type "Ab2"
	setcycle 7 number "1"
	setcycle 7 auditory "Fanatisch"
	setcycle 7 target_word "Fanatisch"
	setcycle 7 real_modality_of_target_word "Audio"
	setcycle 7 number_stimuli "1"
	setcycle 7 visual "x x x"
	setcycle 8 trial_number "153"
	setcycle 8 trial_type "Aa1 + Va2"
	setcycle 8 number "1"
	setcycle 8 auditory "Arrogant"
	setcycle 8 target_word "Ausgeraubt"
	setcycle 8 real_modality_of_target_word "Visual"
	setcycle 8 number_stimuli "2"
	setcycle 8 visual "Ausgeraubt"
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	setcycle 16 trial_number "161"
	setcycle 16 trial_type "Aa1 + Va2"
	setcycle 16 number "1"
	setcycle 16 auditory "Aufregend"
	setcycle 16 target_word "Aufregend"
	setcycle 16 real_modality_of_target_word "Audio"
	setcycle 16 number_stimuli "2"
	setcycle 16 visual "Erotisch"
	setcycle 17 trial_number "162"
	setcycle 17 trial_type "Aa2 + Va1"
	setcycle 17 number "1"
	setcycle 17 auditory "Erotisch"
	setcycle 17 target_word "Aufregend"
	setcycle 17 real_modality_of_target_word "Visual"
	setcycle 17 number_stimuli "2"
	setcycle 17 visual "Aufregend"
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	setcycle 19 trial_number "164"
	setcycle 19 trial_type "Ab2 + Va1"
	setcycle 19 number "1"
	setcycle 19 auditory "Feurig"
	setcycle 19 target_word "Aufregend"
	setcycle 19 real_modality_of_target_word "Visual"
	setcycle 19 number_stimuli "2"
	setcycle 19 visual "Aufregend"
	setcycle 20 trial_number "165"
	setcycle 20 trial_type "Ab1 + Vb2"
	setcycle 20 number "1"
	setcycle 20 auditory "Euphorisch"
	setcycle 20 target_word "Euphorisch"
	setcycle 20 real_modality_of_target_word "Audio"
	setcycle 20 number_stimuli "2"
	setcycle 20 visual "Feurig"
	setcycle 21 trial_number "166"
	setcycle 21 trial_type "Ab2 + Vb1"
	setcycle 21 number "1"
	setcycle 21 auditory "Feurig"
	setcycle 21 target_word "Euphorisch"
	setcycle 21 real_modality_of_target_word "Visual"
	setcycle 21 number_stimuli "2"
	setcycle 21 visual "Euphorisch"
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	setcycle 28 trial_number "173"
	setcycle 28 trial_type "Va2"
	setcycle 28 number "1"
	setcycle 28 auditory "Silence"
	setcycle 28 target_word "Erotisch"
	setcycle 28 real_modality_of_target_word "Visual"
	setcycle 28 number_stimuli "1"
	setcycle 28 visual "Erotisch"
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	setcycle 30 trial_number "175"
	setcycle 30 trial_type "Vb2"
	setcycle 30 number "1"
	setcycle 30 auditory "Silence"
	setcycle 30 target_word "Feurig"
	setcycle 30 real_modality_of_target_word "Visual"
	setcycle 30 number_stimuli "1"
	setcycle 30 visual "Feurig"
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	setcycle 48 trial_number "145"
	setcycle 48 trial_type "Va1"
	setcycle 48 number "2"
	setcycle 48 auditory "Silence"
	setcycle 48 target_word "Arrogant"
	setcycle 48 real_modality_of_target_word "Visual"
	setcycle 48 number_stimuli "1"
	setcycle 48 visual "Arrogant"
	setcycle 49 trial_number "146"
	setcycle 49 trial_type "Aa1"
	setcycle 49 number "2"
	setcycle 49 auditory "Arrogant"
	setcycle 49 target_word "Arrogant"
	setcycle 49 real_modality_of_target_word "Audio"
	setcycle 49 number_stimuli "1"
	setcycle 49 visual "x x x"
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	setcycle 56 trial_number "153"
	setcycle 56 trial_type "Aa1 + Va2"
	setcycle 56 number "2"
	setcycle 56 auditory "Arrogant"
	setcycle 56 target_word "Ausgeraubt"
	setcycle 56 real_modality_of_target_word "Visual"
	setcycle 56 number_stimuli "2"
	setcycle 56 visual "Ausgeraubt"
	setcycle 57 trial_number "154"
	setcycle 57 trial_type "Aa2 + Va1"
	setcycle 57 number "2"
	setcycle 57 auditory "Ausgeraubt"
	setcycle 57 target_word "Ausgeraubt"
	setcycle 57 real_modality_of_target_word "Audio"
	setcycle 57 number_stimuli "2"
	setcycle 57 visual "Arrogant"
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	run sequence

define loop first_set_part1
	set repeat "1"
	set description "Repeatedly runs another item"
	set item "sequence"
	set column_order "auditory;visual;target_word;real_modality_of_target_word;trial_number;trial_type;number;number_stimuli"
	set cycles "96"
	set order "random"
	setcycle 0 trial_number "49"
	setcycle 0 trial_type "Va1"
	setcycle 0 number_stimuli "1"
	setcycle 0 auditory "Silence"
	setcycle 0 target_word "Tapfer"
	setcycle 0 real_modality_of_target_word "Visual"
	setcycle 0 number "1"
	setcycle 0 visual "Tapfer"
	setcycle 1 trial_number "50"
	setcycle 1 trial_type "Aa1"
	setcycle 1 number_stimuli "1"
	setcycle 1 auditory "Tapfer"
	setcycle 1 target_word "Tapfer"
	setcycle 1 real_modality_of_target_word "Audio"
	setcycle 1 number "1"
	setcycle 1 visual "x x x"
	setcycle 2 trial_number "51"
	setcycle 2 trial_type "Vb1"
	setcycle 2 number_stimuli "1"
	setcycle 2 auditory "Silence"
	setcycle 2 target_word "Beherzt"
	setcycle 2 real_modality_of_target_word "Visual"
	setcycle 2 number "1"
	setcycle 2 visual "Beherzt"
	setcycle 3 trial_number "52"
	setcycle 3 trial_type "Ab1"
	setcycle 3 number_stimuli "1"
	setcycle 3 auditory "Beherzt"
	setcycle 3 target_word "Beherzt"
	setcycle 3 real_modality_of_target_word "Audio"
	setcycle 3 number "1"
	setcycle 3 visual "x x x"
	setcycle 4 trial_number "53"
	setcycle 4 trial_type "Va2"
	setcycle 4 number_stimuli "1"
	setcycle 4 auditory "Silence"
	setcycle 4 target_word "BildhU+00FCbsch"
	setcycle 4 real_modality_of_target_word "Visual"
	setcycle 4 number "1"
	setcycle 4 visual "BildhU+00FCbsch"
	setcycle 5 trial_number "54"
	setcycle 5 trial_type "Aa2"
	setcycle 5 number_stimuli "1"
	setcycle 5 auditory "BildhU+00FCbsch"
	setcycle 5 target_word "BildhU+00FCbsch"
	setcycle 5 real_modality_of_target_word "Audio"
	setcycle 5 number "1"
	setcycle 5 visual "x x x"
	setcycle 6 trial_number "55"
	setcycle 6 trial_type "Vb2"
	setcycle 6 number_stimuli "1"
	setcycle 6 auditory "Silence"
	setcycle 6 target_word "Munter"
	setcycle 6 real_modality_of_target_word "Visual"
	setcycle 6 number "1"
	setcycle 6 visual "Munter"
	setcycle 7 trial_number "56"
	setcycle 7 trial_type "Ab2"
	setcycle 7 number_stimuli "1"
	setcycle 7 auditory "Munter"
	setcycle 7 target_word "Munter"
	setcycle 7 real_modality_of_target_word "Audio"
	setcycle 7 number "1"
	setcycle 7 visual "x x x"
	setcycle 8 trial_number "57"
	setcycle 8 trial_type "Aa1 + Va2"
	setcycle 8 number_stimuli "2"
	setcycle 8 auditory "Tapfer"
	setcycle 8 target_word "BildhU+00FCbsch"
	setcycle 8 real_modality_of_target_word "Visual"
	setcycle 8 number "1"
	setcycle 8 visual "BildhU+00FCbsch"
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	setcycle 16 trial_number "65"
	setcycle 16 trial_type "Aa1 + Va2"
	setcycle 16 number_stimuli "2"
	setcycle 16 auditory "DU+00E4mlich"
	setcycle 16 target_word "DU+00E4mlich"
	setcycle 16 real_modality_of_target_word "Audio"
	setcycle 16 number "1"
	setcycle 16 visual "Erfroren"
	setcycle 17 trial_number "66"
	setcycle 17 trial_type "Aa2 + Va1"
	setcycle 17 number_stimuli "2"
	setcycle 17 auditory "Erfroren"
	setcycle 17 target_word "DU+00E4mlich"
	setcycle 17 real_modality_of_target_word "Visual"
	setcycle 17 number "1"
	setcycle 17 visual "DU+00E4mlich"
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	setcycle 19 trial_number "68"
	setcycle 19 trial_type "Ab2 + Va1"
	setcycle 19 number_stimuli "2"
	setcycle 19 auditory "OrdinU+00E4r"
	setcycle 19 target_word "DU+00E4mlich"
	setcycle 19 real_modality_of_target_word "Visual"
	setcycle 19 number "1"
	setcycle 19 visual "DU+00E4mlich"
	setcycle 20 trial_number "69"
	setcycle 20 trial_type "Ab1 + Vb2"
	setcycle 20 number_stimuli "2"
	setcycle 20 auditory "Verfault"
	setcycle 20 target_word "Verfault"
	setcycle 20 real_modality_of_target_word "Audio"
	setcycle 20 number "1"
	setcycle 20 visual "OrdinU+00E4r"
	setcycle 21 trial_number "70"
	setcycle 21 trial_type "Ab2 + Vb1"
	setcycle 21 number_stimuli "2"
	setcycle 21 auditory "OrdinU+00E4r"
	setcycle 21 target_word "Verfault"
	setcycle 21 real_modality_of_target_word "Visual"
	setcycle 21 number "1"
	setcycle 21 visual "Verfault"
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	setcycle 28 trial_number "77"
	setcycle 28 trial_type "Va2"
	setcycle 28 number_stimuli "1"
	setcycle 28 auditory "Silence"
	setcycle 28 target_word "Erfroren"
	setcycle 28 real_modality_of_target_word "Visual"
	setcycle 28 number "1"
	setcycle 28 visual "Erfroren"
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	setcycle 30 trial_number "79"
	setcycle 30 trial_type "Vb2"
	setcycle 30 number_stimuli "1"
	setcycle 30 auditory "Silence"
	setcycle 30 target_word "OrdinU+00E4r"
	setcycle 30 real_modality_of_target_word "Visual"
	setcycle 30 number "1"
	setcycle 30 visual "OrdinU+00E4r"
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	setcycle 48 trial_number "49"
	setcycle 48 trial_type "Va1"
	setcycle 48 number_stimuli "1"
	setcycle 48 auditory "Silence"
	setcycle 48 target_word "Tapfer"
	setcycle 48 real_modality_of_target_word "Visual"
	setcycle 48 number "2"
	setcycle 48 visual "Tapfer"
	setcycle 49 trial_number "50"
	setcycle 49 trial_type "Aa1"
	setcycle 49 number_stimuli "1"
	setcycle 49 auditory "Tapfer"
	setcycle 49 target_word "Tapfer"
	setcycle 49 real_modality_of_target_word "Audio"
	setcycle 49 number "2"
	setcycle 49 visual "x x x"
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	setcycle 56 trial_number "57"
	setcycle 56 trial_type "Aa1 + Va2"
	setcycle 56 number_stimuli "2"
	setcycle 56 auditory "Tapfer"
	setcycle 56 target_word "BildhU+00FCbsch"
	setcycle 56 real_modality_of_target_word "Visual"
	setcycle 56 number "2"
	setcycle 56 visual "BildhU+00FCbsch"
	setcycle 57 trial_number "58"
	setcycle 57 trial_type "Aa2 + Va1"
	setcycle 57 number_stimuli "2"
	setcycle 57 auditory "BildhU+00FCbsch"
	setcycle 57 target_word "BildhU+00FCbsch"
	setcycle 57 real_modality_of_target_word "Audio"
	setcycle 57 number "2"
	setcycle 57 visual "Tapfer"
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	run sequence

define loop first_set_part2
	set repeat "1"
	set description "Repeatedly runs another item"
	set item "sequence"
	set column_order "auditory;visual;target_word;real_modality_of_target_word;number;number_stimuli;trial_number;trial_type"
	set cycles "96"
	set order "random"
	setcycle 0 trial_number "1"
	setcycle 0 trial_type "Aa1 + Va2"
	setcycle 0 auditory "AbhU+00E4ngig"
	setcycle 0 target_word "AbhU+00E4ngig"
	setcycle 0 number "1"
	setcycle 0 number_stimuli "2"
	setcycle 0 visual "HU+00E4sslich"
	setcycle 0 real_modality_of_target_word "Audio"
	setcycle 1 trial_number "2"
	setcycle 1 trial_type "Aa2 + Va1"
	setcycle 1 auditory "HU+00E4sslich"
	setcycle 1 target_word "AbhU+00E4ngig"
	setcycle 1 number "1"
	setcycle 1 number_stimuli "2"
	setcycle 1 visual "AbhU+00E4ngig"
	setcycle 1 real_modality_of_target_word "Visual"
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	setcycle 3 trial_number "4"
	setcycle 3 trial_type "Ab2 + Va1"
	setcycle 3 auditory "Stickig"
	setcycle 3 target_word "AbhU+00E4ngig"
	setcycle 3 number "1"
	setcycle 3 number_stimuli "2"
	setcycle 3 visual "AbhU+00E4ngig"
	setcycle 3 real_modality_of_target_word "Visual"
	setcycle 4 trial_number "5"
	setcycle 4 trial_type "Ab1 + Vb2"
	setcycle 4 auditory "Schwachsinnig"
	setcycle 4 target_word "Schwachsinnig"
	setcycle 4 number "1"
	setcycle 4 number_stimuli "2"
	setcycle 4 visual "Stickig"
	setcycle 4 real_modality_of_target_word "Audio"
	setcycle 5 trial_number "6"
	setcycle 5 trial_type "Ab2 + Vb1"
	setcycle 5 auditory "Stickig"
	setcycle 5 target_word "Schwachsinnig"
	setcycle 5 number "1"
	setcycle 5 number_stimuli "2"
	setcycle 5 visual "Schwachsinnig"
	setcycle 5 real_modality_of_target_word "Visual"
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	setcycle 8 trial_number "9"
	setcycle 8 trial_type "Va1"
	setcycle 8 auditory "Silence"
	setcycle 8 target_word "AbhU+00E4ngig"
	setcycle 8 number "1"
	setcycle 8 number_stimuli "1"
	setcycle 8 visual "AbhU+00E4ngig"
	setcycle 8 real_modality_of_target_word "Visual"
	setcycle 9 trial_number "10"
	setcycle 9 trial_type "Aa1"
	setcycle 9 auditory "AbhU+00E4ngig"
	setcycle 9 target_word "AbhU+00E4ngig"
	setcycle 9 number "1"
	setcycle 9 number_stimuli "1"
	setcycle 9 visual "x x x"
	setcycle 9 real_modality_of_target_word "Audio"
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	setcycle 12 trial_number "13"
	setcycle 12 trial_type "Va2"
	setcycle 12 auditory "Silence"
	setcycle 12 target_word "HU+00E4sslich"
	setcycle 12 number "1"
	setcycle 12 number_stimuli "1"
	setcycle 12 visual "HU+00E4sslich"
	setcycle 12 real_modality_of_target_word "Visual"
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	setcycle 14 trial_number "15"
	setcycle 14 trial_type "Vb2"
	setcycle 14 auditory "Silence"
	setcycle 14 target_word "Stickig"
	setcycle 14 number "1"
	setcycle 14 number_stimuli "1"
	setcycle 14 visual "Stickig"
	setcycle 14 real_modality_of_target_word "Visual"
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	setcycle 32 trial_number "33"
	setcycle 32 trial_type "Aa1 + Va2"
	setcycle 32 auditory "Tapfer"
	setcycle 32 target_word "Tapfer"
	setcycle 32 number "1"
	setcycle 32 number_stimuli "2"
	setcycle 32 visual "BildhU+00FCbsch"
	setcycle 32 real_modality_of_target_word "Audio"
	setcycle 33 trial_number "34"
	setcycle 33 trial_type "Aa2 + Va1"
	setcycle 33 auditory "BildhU+00FCbsch"
	setcycle 33 target_word "Tapfer"
	setcycle 33 number "1"
	setcycle 33 number_stimuli "2"
	setcycle 33 visual "Tapfer"
	setcycle 33 real_modality_of_target_word "Visual"
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	setcycle 35 trial_number "36"
	setcycle 35 trial_type "Ab2 + Va1"
	setcycle 35 auditory "Munter"
	setcycle 35 target_word "Tapfer"
	setcycle 35 number "1"
	setcycle 35 number_stimuli "2"
	setcycle 35 visual "Tapfer"
	setcycle 35 real_modality_of_target_word "Visual"
	setcycle 36 trial_number "37"
	setcycle 36 trial_type "Ab1 + Vb2"
	setcycle 36 auditory "Beherzt"
	setcycle 36 target_word "Beherzt"
	setcycle 36 number "1"
	setcycle 36 number_stimuli "2"
	setcycle 36 visual "Munter"
	setcycle 36 real_modality_of_target_word "Audio"
	setcycle 37 trial_number "38"
	setcycle 37 trial_type "Ab2 + Vb1"
	setcycle 37 auditory "Munter"
	setcycle 37 target_word "Beherzt"
	setcycle 37 number "1"
	setcycle 37 number_stimuli "2"
	setcycle 37 visual "Beherzt"
	setcycle 37 real_modality_of_target_word "Visual"
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	setcycle 44 trial_number "45"
	setcycle 44 trial_type "Va2"
	setcycle 44 auditory "Silence"
	setcycle 44 target_word "BildhU+00FCbsch"
	setcycle 44 number "1"
	setcycle 44 number_stimuli "1"
	setcycle 44 visual "BildhU+00FCbsch"
	setcycle 44 real_modality_of_target_word "Visual"
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	setcycle 46 trial_number "47"
	setcycle 46 trial_type "Vb2"
	setcycle 46 auditory "Silence"
	setcycle 46 target_word "Munter"
	setcycle 46 number "1"
	setcycle 46 number_stimuli "1"
	setcycle 46 visual "Munter"
	setcycle 46 real_modality_of_target_word "Visual"
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	setcycle 48 trial_number "1"
	setcycle 48 trial_type "Aa1 + Va2"
	setcycle 48 auditory "AbhU+00E4ngig"
	setcycle 48 target_word "AbhU+00E4ngig"
	setcycle 48 number "2"
	setcycle 48 number_stimuli "2"
	setcycle 48 visual "HU+00E4sslich"
	setcycle 48 real_modality_of_target_word "Audio"
	setcycle 49 trial_number "2"
	setcycle 49 trial_type "Aa2 + Va1"
	setcycle 49 auditory "HU+00E4sslich"
	setcycle 49 target_word "AbhU+00E4ngig"
	setcycle 49 number "2"
	setcycle 49 number_stimuli "2"
	setcycle 49 visual "AbhU+00E4ngig"
	setcycle 49 real_modality_of_target_word "Visual"
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	setcycle 56 trial_number "9"
	setcycle 56 trial_type "Va1"
	setcycle 56 auditory "Silence"
	setcycle 56 target_word "AbhU+00E4ngig"
	setcycle 56 number "2"
	setcycle 56 number_stimuli "1"
	setcycle 56 visual "AbhU+00E4ngig"
	setcycle 56 real_modality_of_target_word "Visual"
	setcycle 57 trial_number "10"
	setcycle 57 trial_type "Aa1"
	setcycle 57 auditory "AbhU+00E4ngig"
	setcycle 57 target_word "AbhU+00E4ngig"
	setcycle 57 number "2"
	setcycle 57 number_stimuli "1"
	setcycle 57 visual "x x x"
	setcycle 57 real_modality_of_target_word "Audio"
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	run sequence

define sequence sequence
	run fixation_dot "always"
	run visual_simultaneous "always"
	run auditory_simultaneous "always"
	run sketchpad "always"
	run target_word "[number]=1"
	run aud_target_word "[number]=2"
	run correct_response_script "always"
	run keyboard_response "always"
	run logger "always"

define text_display Final_mesage
	set foreground "black"
	set font_size "18"
	set description "Presents a display consisting of text"
	set maxchar "50"
	set align "center"
	set content "Vielen Dank fU+00FCr Ihre Zeit."
	set background "white"
	set duration "keypress"
	set font_family "mono"

define sketchpad sketchpad
	set duration "1000"
	set description "Displays stimuli"

define sampler aud_target_word
	set sample "/home/raid3/decaso/Desktop/Experiment/FINAL/EXPERIMENT.OPENSESAME/EXPERIMENT WORDS/task phase/[target_word].wav"
	set description "Plays a sound file in .wav or .ogg format"
	set volume "1"
	set pitch "1"
	set duration "0"
	set stop_after "0"
	set pan "0"
	set fade_in "0"

define loop second_part_part2
	set repeat "1"
	set description "Repeatedly runs another item"
	set item "sequence"
	set column_order "auditory;visual;target_word;real_modality_of_target_word;trial_number;trial_type;number;number_stimuli"
	set cycles "96"
	set order "random"
	setcycle 0 trial_number "97"
	setcycle 0 trial_type "Aa1 + Va2"
	setcycle 0 number "1"
	setcycle 0 auditory "Lustig"
	setcycle 0 target_word "Lustig"
	setcycle 0 real_modality_of_target_word "Audio"
	setcycle 0 number_stimuli "2"
	setcycle 0 visual "Raffiniert"
	setcycle 1 trial_number "98"
	setcycle 1 trial_type "Aa2 + Va1"
	setcycle 1 number "1"
	setcycle 1 auditory "Raffiniert"
	setcycle 1 target_word "Lustig"
	setcycle 1 real_modality_of_target_word "Visual"
	setcycle 1 number_stimuli "2"
	setcycle 1 visual "Lustig"
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	setcycle 3 trial_number "100"
	setcycle 3 trial_type "Ab2 + Va1"
	setcycle 3 number "1"
	setcycle 3 auditory "Pfiffig"
	setcycle 3 target_word "Lustig"
	setcycle 3 real_modality_of_target_word "Visual"
	setcycle 3 number_stimuli "2"
	setcycle 3 visual "Lustig"
	setcycle 4 trial_number "101"
	setcycle 4 trial_type "Ab1 + Vb2"
	setcycle 4 number "1"
	setcycle 4 auditory "Spassig"
	setcycle 4 target_word "Spassig"
	setcycle 4 real_modality_of_target_word "Audio"
	setcycle 4 number_stimuli "2"
	setcycle 4 visual "Pfiffig"
	setcycle 5 trial_number "102"
	setcycle 5 trial_type "Ab2 + Vb1"
	setcycle 5 number "1"
	setcycle 5 auditory "Pfiffig"
	setcycle 5 target_word "Spassig"
	setcycle 5 real_modality_of_target_word "Visual"
	setcycle 5 number_stimuli "2"
	setcycle 5 visual "Spassig"
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	setcycle 8 trial_number "105"
	setcycle 8 trial_type "Va1"
	setcycle 8 number "1"
	setcycle 8 auditory "Silence"
	setcycle 8 target_word "Lustig"
	setcycle 8 real_modality_of_target_word "Visual"
	setcycle 8 number_stimuli "1"
	setcycle 8 visual "Lustig"
	setcycle 9 trial_number "106"
	setcycle 9 trial_type "Aa1"
	setcycle 9 number "1"
	setcycle 9 auditory "Lustig"
	setcycle 9 target_word "Lustig"
	setcycle 9 real_modality_of_target_word "Audio"
	setcycle 9 number_stimuli "1"
	setcycle 9 visual "x x x"
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	setcycle 12 trial_number "109"
	setcycle 12 trial_type "Va2"
	setcycle 12 number "1"
	setcycle 12 auditory "Silence"
	setcycle 12 target_word "Raffiniert"
	setcycle 12 real_modality_of_target_word "Visual"
	setcycle 12 number_stimuli "1"
	setcycle 12 visual "Raffiniert"
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	setcycle 14 trial_number "111"
	setcycle 14 trial_type "Vb2"
	setcycle 14 number "1"
	setcycle 14 auditory "Silence"
	setcycle 14 target_word "Pfiffig"
	setcycle 14 real_modality_of_target_word "Visual"
	setcycle 14 number_stimuli "1"
	setcycle 14 visual "Pfiffig"
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	setcycle 32 trial_number "129"
	setcycle 32 trial_type "Aa1 + Va2"
	setcycle 32 number "1"
	setcycle 32 auditory "Arrogant"
	setcycle 32 target_word "Arrogant"
	setcycle 32 real_modality_of_target_word "Audio"
	setcycle 32 number_stimuli "2"
	setcycle 32 visual "Ausgeraubt"
	setcycle 33 trial_number "130"
	setcycle 33 trial_type "Aa2 + Va1"
	setcycle 33 number "1"
	setcycle 33 auditory "Ausgeraubt"
	setcycle 33 target_word "Arrogant"
	setcycle 33 real_modality_of_target_word "Visual"
	setcycle 33 number_stimuli "2"
	setcycle 33 visual "Arrogant"
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	setcycle 35 trial_number "132"
	setcycle 35 trial_type "Ab2 + Va1"
	setcycle 35 number "1"
	setcycle 35 auditory "Fanatisch"
	setcycle 35 target_word "Arrogant"
	setcycle 35 real_modality_of_target_word "Visual"
	setcycle 35 number_stimuli "2"
	setcycle 35 visual "Arrogant"
	setcycle 36 trial_number "133"
	setcycle 36 trial_type "Ab1 + Vb2"
	setcycle 36 number "1"
	setcycle 36 auditory "Eitrig"
	setcycle 36 target_word "Eitrig"
	setcycle 36 real_modality_of_target_word "Audio"
	setcycle 36 number_stimuli "2"
	setcycle 36 visual "Fanatisch"
	setcycle 37 trial_number "134"
	setcycle 37 trial_type "Ab2 + Vb1"
	setcycle 37 number "1"
	setcycle 37 auditory "Fanatisch"
	setcycle 37 target_word "Eitrig"
	setcycle 37 real_modality_of_target_word "Visual"
	setcycle 37 number_stimuli "2"
	setcycle 37 visual "Eitrig"
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	setcycle 44 trial_number "141"
	setcycle 44 trial_type "Va2"
	setcycle 44 number "1"
	setcycle 44 auditory "Silence"
	setcycle 44 target_word "Ausgeraubt"
	setcycle 44 real_modality_of_target_word "Visual"
	setcycle 44 number_stimuli "1"
	setcycle 44 visual "Ausgeraubt"
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	setcycle 46 trial_number "143"
	setcycle 46 trial_type "Vb2"
	setcycle 46 number "1"
	setcycle 46 auditory "Silence"
	setcycle 46 target_word "Fanatisch"
	setcycle 46 real_modality_of_target_word "Visual"
	setcycle 46 number_stimuli "1"
	setcycle 46 visual "Fanatisch"
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	setcycle 48 trial_number "97"
	setcycle 48 trial_type "Aa1 + Va2"
	setcycle 48 number "2"
	setcycle 48 auditory "Lustig"
	setcycle 48 target_word "Lustig"
	setcycle 48 real_modality_of_target_word "Audio"
	setcycle 48 number_stimuli "2"
	setcycle 48 visual "Raffiniert"
	setcycle 49 trial_number "98"
	setcycle 49 trial_type "Aa2 + Va1"
	setcycle 49 number "2"
	setcycle 49 auditory "Raffiniert"
	setcycle 49 target_word "Lustig"
	setcycle 49 real_modality_of_target_word "Visual"
	setcycle 49 number_stimuli "2"
	setcycle 49 visual "Lustig"
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	setcycle 56 trial_number "105"
	setcycle 56 trial_type "Va1"
	setcycle 56 number "2"
	setcycle 56 auditory "Silence"
	setcycle 56 target_word "Lustig"
	setcycle 56 real_modality_of_target_word "Visual"
	setcycle 56 number_stimuli "1"
	setcycle 56 visual "Lustig"
	setcycle 57 trial_number "106"
	setcycle 57 trial_type "Aa1"
	setcycle 57 number "2"
	setcycle 57 auditory "Lustig"
	setcycle 57 target_word "Lustig"
	setcycle 57 real_modality_of_target_word "Audio"
	setcycle 57 number_stimuli "1"
	setcycle 57 visual "x x x"
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	run sequence

define inline_script correct_response_script
	___run__
	if exp.get("target_word") == exp.get("auditory") and exp.get("number") == 2:
		exp.set ("correct_resp", "1")
	elif exp.get("target_word") == exp.get("visual") and exp.get("number") == 1:
		exp.set ("correct_resp", "1")
	else:
		exp.set ("correct_resp", "2")
	__end__
	___prepare__
	if exp.get("target_word") == exp.get("auditory") and exp.get("number") == 2:
		exp.set ("correct_resp", "1")
	elif exp.get("target_word") == exp.get("visual") and exp.get("number") == 1:
		exp.set ("correct_resp", "1")
	else:
		exp.set ("correct_resp", "2")
	__end__
	set description "Executes Python code"

define keyboard_response keyboard_response
	set allowed_responses "1;2"
	set description "Collects keyboard responses"
	set timeout "infinite"
	set flush "yes"

define sequence experiment
	run text_display "always"
	run all_even "[subject_parity] = even"
	run all_odd "[subject_parity] = odd"
	run Final_mesage "always"

define sketchpad fixation_dot
	set duration "1500"
	set description "Displays stimuli"
	draw fixdot 0 0 color=black show_if="always"

define sketchpad target_word
	set duration "0"
	set description "Displays stimuli"
	draw textline 0 0 "[target_word]" center=1 color=black font_family="mono" font_size=18 font_italic=no font_bold=no show_if="always"

define sequence all_even
	run first_set_part1 "always"
	run RESTING "always"
	run first_set_part2 "always"

define sampler auditory_simultaneous
	set sample "/home/raid3/decaso/Desktop/Experiment/FINAL/EXPERIMENT.OPENSESAME/EXPERIMENT WORDS/task phase/[auditory].wav"
	set description "Plays a sound file in .wav or .ogg format"
	set volume "1"
	set pitch "1"
	set duration "sound"
	set stop_after "0"
	set pan "0"
	set fade_in "0"

define logger logger
	set ignore_missing "yes"
	set description "Logs experimental data"
	set auto_log "no"
	set use_quotes "yes"
	log "time_RESTING"
	log "response"
	log "response_time"
	log "time_second_set_PART1"
	log "trial_number"
	log "trial_type"
	log "number_stimuli"
	log "auditory"
	log "target_word"
	log "real_modality_of_target_word"
	log "number"
	log "visual"
	log "time_first_set_part1"
	log "time_first_set_part2"
	log "time_sequence"
	log "time_Final_mesage"
	log "time_keyboard_response"
	log "time_aud_target_word"
	log "time_second_part_part2"
	log "time_correct_response_script"
	log "time_sketchpad"
	log "time_experiment"
	log "time_fixation_dot"
	log "time_target_word"
	log "time_all_even"
	log "time_auditory_simultaneous"
	log "time_logger"
	log "time_visual_simultaneous"
	log "time_all_odd"
	log "time_text_display"
	log "correct_resp"

define sketchpad visual_simultaneous
	set duration "0"
	set description "Displays stimuli"
	draw textline 0 0 "[visual]" center=1 color=black font_family="mono" font_size=18 font_italic=no font_bold=no show_if="always"

define sequence all_odd
	run second_set_PART1 "always"
	run RESTING "always"
	run second_part_part2 "always"

define text_display text_display
	set foreground "black"
	set font_size "18"
	set description "Presents a display consisting of text"
	set maxchar "50"
	set align "center"
	__content__
	DrU+00FCcken Sie 1 fU+00FCr DAS GLEICHE und 2 fU+00FCr UNTERSCHIEDLICH.
	
	DrU+00FCcken Sie eine beliebige Taste, um zu beginnen.
	__end__
	set background "white"
	set duration "keypress"
	set font_family "mono"

